---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set psychopy_waitblanking yes
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\gitRepos\\Audiometric-Testing-Interface"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set background black

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	Welcome to the audiogram. In this task, press the BLUE button whenever you hear a sound. There will be some long stretches when you don't hear any sounds. Press the BLUE button to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script audiogram_generation
	set description "Executes Python code"
	___run__
	#If you want to test how the audiogram looks without running the whole experiments,
	#use this practice data:
	# scores = {'1000hz':10,'2000hz':15,'3000hz':20,'4000hz':15,'5000hz':15,'6000hz':15,'7000hz':5,'8000hz':20,'9000hz':10,'10000hz':15,'500hz':15,'250hz':15}
	#them, move the 'audiometric_testing.py' file to the Unused items section in OpenSesame
	
	#WRITING TO CSV
	
	import csv
	
	# Create a list of the keys and values in the dictionary
	keys = list(scores.keys())
	values = list(scores.values())
	
	# Open the CSV file for writing
	with open('C:\\gitRepos\\Audiometric-Testing-Interface\\output-data.csv', 'w', newline='') as csvfile:
	
	    # Create a writer object
	    writer = csv.writer(csvfile)
	
	    # Write the header row
	    writer.writerow(['Frequency', 'Amplitude'])
	
	    # Write the data rows
	    for i in range(len(keys)):
	        writer.writerow([keys[i][:-2], values[i]])
	
	#GENERATING AUDIOGRAM IMAGE
	
	import pandas as pd
	import matplotlib.pyplot as plt
	
	# Read the CSV file into a Pandas DataFrame
	df = pd.read_csv('C:\\gitRepos\\Audiometric-Testing-Interface\\output-data.csv')
	fig = plt.figure(figsize=(10,6))
	
	# fig = plt.figure(figsize=(15, 20))
	# Plot the data as a scatter plot
	ax = plt.gca()
	ax.scatter(df['Frequency'], df['Amplitude'])
	ax.set_ylabel('Amplitude (dB)')
	ax.set_xlabel('Frequency (Hz)')
	ax.xaxis.set_label_coords(.5, 1.06)
	ax.set_ylim(-25, 30)
	
	ax.axhline(y=25, linestyle='--', color='gray')
	
	# Add text to the right of the horizontal line
	ax.text(x=775, y=25, s='Beginning of hearing loss', va='center', ha='left', fontsize=6)
	
	# Set the x- and y-axis labels
	# plt.xlabel('Frequency (Hz)')
	# plt.xaxis.set_label_coords(.5, 1)
	# x_label = plt.gca().xaxis.get_label()
	# x_label.set_position((0.5, 1.08))
	# x_label.set_y(1.05)
	# plt.ylabel('Amplitude (dB HL)')
	
	# Set the plot title
	plt.title('Audiogram',y=1.1)
	plt.tick_params(axis='x', which='both', top=True)
	ax.xaxis.set_ticks_position('top')
	ax.xaxis.set_label_position('top')
	ax.invert_yaxis()
	# Show the plot
	
	# plt.figure(fig)
	
	#we aren't allowed to show data to participants, so this is commented out for now
	# plt.show()
	
	fig.savefig('C:\\gitRepos\\Audiometric-Testing-Interface\\audiogram.png')
	__end__
	set _prepare ""

define inline_script audiometric_testing
	set description "Executes Python code"
	___run__
	from openexp.canvas import Canvas
	import pygame.mixer as mixer
	import random
	
	mixer.init()
	# sound_file = 'C:\\Downloads\\audiometric_testing\\250Hz_44100Hz_16bit_05sec.mp3'
	# mixer.music.load(sound_file)
	
	
	#familiarization process
	
	my_canvas = Canvas(exp)
	my_canvas.text("Starting familiarization procedure")
	my_canvas.show()
	clock.sleep(1000)
	
	
	familiarization_hit = False
	freq = 1000
	amp = -20
	str_amp = 20
	prefix = "m"
	
	while familiarization_hit != True:
	    if amp <= 0:
	            prefix = 'm'
	    else:
	        prefix = 'p'
	    if abs(amp) < 10:
	        str_amp = '0' + str(abs(amp))
	    else:
	        str_amp = str(abs(amp))
	    
	    sound_path ='Z:\\Lab_Members\\Ryan\\OpenAudiometer\\stimuli\\' + str(freq) + '_'+ prefix + str_amp + '.wav'
	     
	    sound = mixer.Sound(sound_path)
	    sound.play()
	    #wait for sound to finish playing (each should be 1 sec)
	    clock.sleep(1000)
	    
	    my_keyboard = Keyboard(keylist=['5'], timeout=3000)
	    user_input, end_time = my_keyboard.get_key()
	    if user_input == "5":
	        familiarization_hit = True
	        # we want to start the actual trials 10db lower than where they hear it
	        starting_amp = amp - 10  
	    else:
	        amp += 5
	
	
	
	
	freqs = list(range(1000, 2001, 1000))
	# freqs.append(500)
	# freqs.append(250)
	scores = {}
	
	my_canvas = Canvas(exp)
	
	my_canvas.text("Starting audiometric testing...")
	
	
	my_canvas.show()
	clock.sleep(1000)
	
	mixer.init()
	
	for freq in freqs:
	    
	    hits = {}
	    attempts = {}
	    # print(hits)
	    # print(attempts)
	    hits[starting_amp] = 0 #probably dont need these anymore
	    attempts[starting_amp] = 0
	    amp = starting_amp
	    
	    #This starts as False because we want to first trial to count
	    new_ascending_presentation = False 
	    #When it is True, that means we just went down 10 dbs, and we
	    #dont want to count the next presentation as a hit or an attempt
	
	    prev_hit = False
	    attempts[starting_amp-5] = 0
	    
	    #since we already subtracted 10 from amp (if they hit) or added 5 (if they didn't')
	    #I use amp+10 and amp-5 to check if we need to keep going after the last presentation
	    #we also have to check even when the previous presentation did not receive a hit, such
	    #as when it is their 3rd presentation at a given intensity and they hit the first two times
	    while (prev_hit and attempts[amp+10] < 3) or (prev_hit and attempts[amp+10] >= 3 and hits[amp+10] / attempts[amp+10] < .5) or (not prev_hit and attempts[amp-5] < 3) or (not prev_hit and attempts[amp-5] >= 3 and hits[amp-5] / attempts[amp-5] < .5):
	                           
	        prev_hit = False
	       
	       
	       #Making sure the amplitude matches the name of the stimuli
	        if amp <= 0:
	            prefix = 'm'
	        else:
	            prefix = 'p'
	        if abs(amp) < 10:
	            str_amp = '0' + str(abs(amp))
	        else:
	            str_amp = str(abs(amp))
	            
	        sound_path ='Z:\\Lab_Members\\Ryan\\OpenAudiometer\\stimuli\\' + str(freq) + '_'+ prefix + str_amp + '.wav'
	        # sound_path = 'C:\\Downloads\\audiometric_testing\\stimuli\\'+str(freq)+'hz'+str(amp)+'db.wav'
	        # sound_file = 'C:\\Downloads\\audiometric_testing\\250Hz_44100Hz_16bit_05sec.mp3'
	        sound = mixer.Sound(sound_path)
	       
	        sound.play()
	        
	        #Used for testing. Comment out when using
	        my_canvas = Canvas(exp)
	        my_canvas.text("Playing frequency "+str(freq)+  "hz at amplitude of " +str(amp) + "db")
	        my_canvas.show()
	        
	        
	        #wait for sound to finish playing (each should be 1 sec)
	        clock.sleep(1000) #not sure if this is necessary
	    
	        #give participant 3 seconds to hit 5 (the blue button)
	        my_keyboard = Keyboard(keylist=['5'], timeout=3000)
	        user_input, end_time = my_keyboard.get_key()
	        
	        #for testing - just shows if the user hit
	        # my_canvas = Canvas(exp)
	        # my_canvas.text(user_input)
	        # my_canvas.show()
	        
	        #Need to keep track of whether the presentation of a stimuli is an "ascending presentation",
	        #since we only count the ascending presentations towards hits and attempts
	        if not new_ascending_presentation:
	            if amp in attempts:
	                attempts[amp] +=1
	            else:
	                attempts[amp] =1
	        if user_input == "5":
	            if not new_ascending_presentation:
	                if amp in hits:
	                    hits[amp] += 1
	                else:
	                    hits[amp] = 1
	            prev_hit = True
	            amp -= 10
	            new_ascending_presentation = True
	        else:
	            if amp not in hits:
	                hits[amp] = 0
	            amp += 5
	            new_ascending_presentation = False
	        
	        #i think we need this because if they just hit on a descending presentation,
	        #we dont want to count this for hits or attempt. But, the code in the while loop
	        #checks attemps at amp. So we set this to 0 to avoid an error
	        if amp not in attempts:
	            attempts[amp] = 0
	            
	        #wait between presentations 2 seconds +- 1 second
	       
	        random_wait = random.randint(1000, 3000)
	        clock.sleep(random_wait)
	        
	        #If we run out of stimuli, what should we do?
	        if amp < -25:
	            print("You win! You have the best hearing ever")
	            pass
	        elif amp > 75:
	            pass
	            
	    
	    #after we exit the while loop, we can keep track of what threshold was reached for that freq
	    if prev_hit:
	        scores[str(freq)+"hz"] = amp+10
	    else:
	        scores[str(freq)+"hz"] = amp-5
	    # print(scores)
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions always
	run audiometric_testing always
	run audiogram_generation always

